CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['WELCOME TO THE BEGGINNER SEGMENTATION TUTORIAL!! :D', '', 'To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', 'Drag and drop your IMAGES (you can drag and drop the entire "images_Illum-corrected" folder) into the panel just below this one.', '', '<-Drag and drop your "segmentation_start.cppipe" files into the left panel.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['FOR THIS TUTORIAL, YOU CAN SKIP THIS MODULE, AS IT IS ALREADY CONFIGURED.', '', 'The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', '']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"ChannelNumber": "integer", "Date": "text", "FileLocation": "text", "Frame": "text", "Series": "text", "Site": "integer", "Well": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:C1-Position(?P<PosNumber>[0-9]{3})-(?P<tFrame>[0-9]{4}).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['FOR THIS TUTORIAL, YOU CAN SKIP THIS MODULE, AS IT IS ALREADY CONFIGURED.', '', 'The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.']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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['FOR THIS TUTORIAL, YOU CAN SKIP THIS MODULE, AS IT IS NOT USED.', '', 'The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:PosNumber

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:4
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:DNA
    Name the output image:CondensedSpots
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:7|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
    Select the input image:CondensedSpots
    Name the output image:MaskedSpots
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:MaskedSpots
    Name the primary objects to be identified:CondensedDNA
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:MidCheck
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei
    Select outline color:#0080FF
    Select objects to display:CondensedDNA

MeasureObjectIntensityDistribution:[module_num:10|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enabled:False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
    Hidden:2
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:CondensedDNA
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:11|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enabled:False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
    Select images to measure:DNA
    Select objects to measure:Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

RelateObjects:[module_num:12|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
    Parent objects:Nuclei
    Child objects:CondensedDNA
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelatedSpots
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Example_Speckles\\Own data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:SpeckleTestwImageExtraction_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CondensedDNA
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

SaveImages:[module_num:14|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:MidCheck
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Example_Speckles\\Own data
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder sub-folder|Example_Speckles\\Own data\\lesssee
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    Save with lossless compression?:No

SaveCroppedObjects:[module_num:15|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
    Do you want to save cropped images or object masks?:Images
    Objects:Nuclei
    Directory:Default Input Folder sub-folder|Example_Speckles\\Own data\\SaveimgTest
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:DNA
    Save output crops in nested folders?:Yes
    Saved file format:png
    Image to crop:DNA
